 ### this is a test####
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "ASWStandardDialogs\\AswStatusDialog.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "qPCR_ITR_Kate\\v1.0.0\\Pfizer_STARlet_qPCRTiter.res"
global device ML_STAR ("qPCR_ITR_Kate\\v1.0.0\\Pfizer_STARlet_qPCRTiter.lay", "ML_STAR", hslTrue);
variable i_fltVolumeTransfer;
variable strTipCounter50;
variable t_strTipCounter50;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    i_fltVolumeTransfer = 2;
    if(0){
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
    }
    {
      for(t_strTipCounter50 = 0; t_strTipCounter50 < 1;)
      {
        t_strTipCounter50 = t_strTipCounter50 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        {
          for(t_strTipCounter50 = 0; t_strTipCounter50 < 8;)
          {
            t_strTipCounter50 = t_strTipCounter50 + 1;
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
